ScriptName redoyoneoLocr

# # 210327 K. Yonekura, redoyoneLocr for Lowmagxtal

progdir = C:\ProgramData\yoneoLocr
targetname = SqXtals_
binning1 = 8
confthres = 0.5
cutlevel = 1 # 1: include thick crsystals 2: include thick crystals and at edges

UserSetDirectory
#   SaveNavigator
ReportDirectory 
curDir := $repVal1
RunInShell start "yoneoLow" $progdir\yoneoLowmagXtal.bat $confthres 
delay 10 s
RunInShell $progdir\redoyoneoLocr.bat $curDir\$targetname $binning1

delay 1 s

ReportNavFile 1
navfile = $repVal1
RunInShell $progdir\cnvxtalpos2Nav.bat $navfile.nav $curDir\$targetname $navfile_new.nav $cutlevel
MergeNavFile $navfile_new.nav

RunInShell taskkill /FI "WINDOWTITLE eq yoneoLow*"
